PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = visual_search
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine ISI
    RoutineSettingsComponent ISI
      saveStartStop = False
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    TextComponent blank
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine instructions_t
    RoutineSettingsComponent instructions_t
      saveStartStop = False
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    MouseComponent mouse_instructions_t
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_t
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        คุณจะเห็นรูปทรงหลายรูปปรากฏบนหน้าจอในแต่ละรอบ
        คุณต้องหา "รูปวงกลมสีฟ้าอมเขียว"
        ถ้าหาเจอให้กดปุ่ม สีเขียว
        ถ้าหาไม่เจอให้กดปุ่ม สีแดง
        แตะเพื่อดำเนินการต่อ
  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
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    TextComponent text_3
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 3
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    TextComponent text_2
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 2
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    TextComponent text_1
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 1
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  Routine visual_search
    RoutineSettingsComponent visual_search
      saveStartStop = False
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    PolygonComponent square_t
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_t
      Code Type = Auto->JS
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      Begin Routine:
        n_distractors1 = decoy_1 # how many distractors on screen
        n_distractors2 = decoy_2
        n_target = tar

        # empty list for distractors
        distractors1 = []
        distractors2 = []
        targets = []


        xys = [[-0.25, -0.25], [-0.194444, -0.25], [-0.138889, -0.25], [-0.083333, -0.25], [-0.027778, -0.25],
               [0.027778, -0.25], [0.083333, -0.25], [0.138889, -0.25], [0.194444, -0.25], [0.25, -0.25],

               [-0.25, -0.194444], [-0.194444, -0.194444], [-0.138889, -0.194444], [-0.083333, -0.194444], [-0.027778, -0.194444],
               [0.027778, -0.194444], [0.083333, -0.194444], [0.138889, -0.194444], [0.194444, -0.194444], [0.25, -0.194444],

               [-0.25, -0.138889], [-0.194444, -0.138889], [-0.138889, -0.138889], [-0.083333, -0.138889], [-0.027778, -0.138889],
               [0.027778, -0.138889], [0.083333, -0.138889], [0.138889, -0.138889], [0.194444, -0.138889], [0.25, -0.138889],

               [-0.25, -0.083333], [-0.194444, -0.083333], [-0.138889, -0.083333], [-0.083333, -0.083333], [-0.027778, -0.083333],
               [0.027778, -0.083333], [0.083333, -0.083333], [0.138889, -0.083333], [0.194444, -0.083333], [0.25, -0.083333],

               [-0.25, -0.027778], [-0.194444, -0.027778], [-0.138889, -0.027778], [-0.083333, -0.027778], [-0.027778, -0.027778],
               [0.027778, -0.027778], [0.083333, -0.027778], [0.138889, -0.027778], [0.194444, -0.027778], [0.25, -0.027778],

               [-0.25, 0.027778], [-0.194444, 0.027778], [-0.138889, 0.027778], [-0.083333, 0.027778], [-0.027778, 0.027778],
               [0.027778, 0.027778], [0.083333, 0.027778], [0.138889, 0.027778], [0.194444, 0.027778], [0.25, 0.027778],

               [-0.25, 0.083333], [-0.194444, 0.083333], [-0.138889, 0.083333], [-0.083333, 0.083333], [-0.027778, 0.083333],
               [0.027778, 0.083333], [0.083333, 0.083333], [0.138889, 0.083333], [0.194444, 0.083333], [0.25, 0.083333],

               [-0.25, 0.138889], [-0.194444, 0.138889], [-0.138889, 0.138889], [-0.083333, 0.138889], [-0.027778, 0.138889],
               [0.027778, 0.138889], [0.083333, 0.138889], [0.138889, 0.138889], [0.194444, 0.138889], [0.25, 0.138889],

               [-0.25, 0.194444], [-0.194444, 0.194444], [-0.138889, 0.194444], [-0.083333, 0.194444], [-0.027778, 0.194444],
               [0.027778, 0.194444], [0.083333, 0.194444], [0.138889, 0.194444], [0.194444, 0.194444], [0.25, 0.194444],

               [-0.25, 0.25], [-0.194444, 0.25], [-0.138889, 0.25], [-0.083333, 0.25], [-0.027778, 0.25],
               [0.027778, 0.25], [0.083333, 0.25], [0.138889, 0.25], [0.194444, 0.25], [0.25, 0.25]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        count1 = 0
        positions = []


        for i in range(n_distractors1):
            # Create a triangle polygon
            distractor1 = visual.Polygon(win=win, edges=4, size=0.05,
                pos=[xys[count][0], xys[count][1]],
                lineColor=[-0.4902, 0.7647, 0.6314], fillColor=[-0.4902, 0.7647, 0.6314], opacity=1.0, depth=-1.0, ori=45)
            distractors1.append(distractor1)
            positions.append(xys[count])
            count += 1

        for i in range(n_distractors2):
            # Create a triangle polygon
            distractor2 = visual.Polygon(win=win, edges=1000, size=0.04,
                pos=[xys[count][0], xys[count][1]],
                lineColor=[1.0000, 0.5059, 0.5922], fillColor=[1.0000, 0.5059, 0.5922], opacity=1.0, depth=-1.0, ori=45)
            distractors2.append(distractor2)
            positions.append(xys[count])
            count += 1

        for i in range(n_target):
            # Create a triangle polygon
            target = visual.Polygon(win=win, edges=1000, size=0.04,
                pos=[xys[count][0], xys[count][1]],
                lineColor=[-0.4902, 0.7647, 0.6314], fillColor=[-0.4902, 0.7647, 0.6314], opacity=1.0, depth=-1.0)
            targets.append(target)
            positions.append(xys[count])


        # present the distractors on screen
        for distractor1 in distractors1:
            distractor1.setAutoDraw(True)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(True)

        for target in targets:
            target.setAutoDraw(True)
      End Routine:
        if mouse_t.clicked_name[-1] == corrAns_3:
            correct = 1
        else:
            correct = 0

        # undraw the distractors
        for distractor1 in distractors1:
            distractor1.setAutoDraw(False)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(False)

        for target in targets:
            target.setAutoDraw(False)
    TextComponent instruct_t
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = มีวงกลมสีฟ้าอมเขียว      หรือไม่
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    MouseComponent mouse_t
      clickable = target_3,C_3,InC_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    PolygonComponent target_t
      fillColor = -0.3255, 0.4118, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (10, 10)
      shape = triangle
      size = (0.039, 0.035)
      startVal [time (s)] = 0.0
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    ImageComponent C_t
      image = Images/Yes.png
      pos = (0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent InC_t
      image = Images/No.png
      pos = (-0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_t
      image = Images/3.png
      pos = (0.14, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine feedback
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    TextComponent fb
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'คุณพบเป้าหมายใน ' + str(int(mouse_t.time[-1]*1000)) + 'ms'
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    TextComponent trial_counter
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials_t.thisN) + '/' + str(trials_t.nTotal)
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    CodeComponent track_rt
      Code Type = JS
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      Begin JS Experiment:
        rts = [];
        n_round_t = 0;
      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
      End JS Routine:
        rts.push(mouse_t.time.slice((- 1))[0]);
        n_round_t += 1;
        if ((n_round_t > 1)) {
            trials_t.finished = true;
        }
    TextComponent FB
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent text_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        แตะหน้าจอเพื่อเริ่มเล่น
    MouseComponent mouse_instructions
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine visual_search_3
    RoutineSettingsComponent visual_search_3
      saveStartStop = False
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    PolygonComponent square_3
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
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      End Routine:
        if mouse_3.clicked_name[-1] == corrAns_3:
            correct = 1
        else:
            correct = 0

        # undraw the distractors
        for distractor1 in distractors1:
            distractor1.setAutoDraw(False)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(False)

        for target in targets:
            target.setAutoDraw(False)
    TextComponent instruct_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = มีวงกลมสีฟ้าอมเขียว      หรือไม่
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    MouseComponent mouse_3
      clickable = target_3,C_3,InC_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    PolygonComponent target_3
      fillColor = -0.4902, 0.7647, 0.6314
      lineColor = 1.0000, 0.5059, 0.5922
      pos = (10, 10)
      shape = triangle
      size = (0.039, 0.035)
      startVal [time (s)] = 0.0
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    ImageComponent C_3
      image = Images/Yes.png
      pos = (0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent InC_3
      image = Images/No.png
      pos = (-0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = Images/3.png
      pos = (0.14, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine feedback_3
    RoutineSettingsComponent feedback_3
      saveStartStop = False
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    TextComponent fb_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'คุณพบเป้าหมายใน ' + str(int(mouse_3.time[-1]*1000)) + 'ms'
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    TextComponent trial_counter_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials_3.thisN) + '/' + str(trials_3.nTotal)
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    CodeComponent track_rt_3
      Code Type = JS
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      Begin JS Experiment:
        rts = [];
        n_round_3 = 0;
      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
      End JS Routine:
        rts.push(mouse_3.time.slice((- 1))[0]);
        n_round_3 += 1;
        if ((n_round_3 > 100)) {
            trials_3.finished = true;
        }
    TextComponent FB_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextComponent text_end
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = ขอบคุณสำหรับการเข้าร่วม
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        // let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
        //     console.log(dataObj)
        //     return Object.values(it).toString()
        // }).join('\n')

        // Extract all unique keys from the JSON objects
        const allKeys = [...new Set(dataObj.flatMap(obj => Object.keys(obj)))];

        // Convert JSON to CSV format
        const csvRows = [];

        // Add header row
        csvRows.push(allKeys.join(','));

        // Add data rows
        for (const obj of dataObj) {
            const row = allKeys.map(key => obj[key] !== undefined ? `"${obj[key]}"` : '');
            csvRows.push(row.join(','));
        }

        // Change to CSV file
        const data = csvRows.join('\n');

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '/',
            },
            body: JSON.stringify({
                experimentID: 'Cpx5UFMaIxuR', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  Routine instructions_t
  Routine countdown
  LoopInitiator trials_t loopType="TrialHandler"
    conditionsFile = conditions3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tar', 0), ('decoy_1', 3), ('decoy_2', 2), ('corrAns_3', 'InC_3')]),
      OrderedDict([('tar', 1), ('decoy_1', 7), ('decoy_2', 8), ('corrAns_3', 'C_3')]),
      OrderedDict([('tar', 1), ('decoy_1', 13), ('decoy_2', 12), ('corrAns_3', 'C_3')])]
    Routine ISI
    Routine visual_search
    Routine feedback
  LoopTerminator trials_t
  Routine instructions
  Routine countdown
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('tar', 0), ('decoy_1', 3), ('decoy_2', 2), ('corrAns_3', 'InC_3')]),
      OrderedDict([('tar', 1), ('decoy_1', 7), ('decoy_2', 8), ('corrAns_3', 'C_3')]),
      OrderedDict([('tar', 1), ('decoy_1', 13), ('decoy_2', 12), ('corrAns_3', 'C_3')])]
    Routine ISI
    Routine visual_search_3
    Routine feedback_3
  LoopTerminator trials_3
  Routine end
